PsychoPy2experiment version="1.84.0"
Settings
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  color = $[0.0,0.0,0.0]
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Experiment info = {u'Handedness': u'r/l', u'participant': u''}
  expName = eefrt 2.0
  Units = norm
  Screen = 1
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Routines
  Routine Pract_Instr
    TextComponent Prac_Instr
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        You will now complete 4 practice trials.

        Select the easy task first and the hard task second.

        Then choose either task difficulty for the remaining rounds.

        Points are not earned on the practice trials.

        Press ENTER to begin the practice.
    KeyboardComponent Prac_InstrKey
      forceEndRoutine = True
      allowedKeys = 'return'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine pract_Select_2
    CodeComponent chooseBranch_3
      Begin Experiment:
        from psychopy import visual
        import random
        #initialize scoring variables
        #round score
        rscore = 0
        #total score
        tscore = 0
      Begin Routine:
        prob=randint(1,(probability)) #probability for earning points

        selectBlock=randint(1,3) #randomly selects easy or hard trial

        theProbText=(probText)

        hardMoney=randint(2,5) #earn 2-4 points on hard trials

        hardMoneyText=hardMoney

        winH=rscore+hardMoney

        hardMoneyText="""Press B for Hard Task\n%s Points""" %hardMoney

        if not countdownStarted:
            countdownClock = core.CountdownTimer(5)
            countdownStarted = True
        #5 second timer
      End Routine:
        #Press A for easy, B for hard, otherwise chosen randomly after 5 secs
        if resp.keys=='a':
            nRepsA=1
            nRepsB=0
        elif resp.keys=='b':
            nRepsA=0
            nRepsB=1
        elif selectBlock==1:
            nRepsA=0
            nRepsB=1
        else:
            nRepsA=1
            nRepsB=0
        #
        countdownStarted = False
      Each Frame:
        timeRemaining = countdownClock.getTime()

        if timeRemaining <= 0.0:
            continueRoutine = False
            countdownStarted = False
    KeyboardComponent resp_3
      forceEndRoutine = True
      allowedKeys = ['a', 'b']
      startVal [time (s)] = 0.0
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    TextComponent instrText_3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Choose Your Task:

        Probability of win:

        Press A for Easy Task
        1 point
    TextComponent percentText_3
      text [set every repeat] = $theProbText
      pos = [-.14, -.05]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent moneyText_3
      text [set every repeat] = $hardMoneyText
      pos = [0, -.5]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine Feedback
    CodeComponent checkPopped
      Begin Experiment:
        feedbackText=""
      Begin Routine:
        if popped==True:
            feedbackText="You completed the task!"
        else:
            feedbackText="You failed to complete the task."
    TextComponent feedbackMsg
      text [set every repeat] = $feedbackText
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine pract_A
    TextComponent text_4
      text [set every repeat] = $bar_textE
      pos = (0, .5)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent CheckKeys_2
      Begin Routine:
        npumps=0
        maxPumps=1
      Each Frame:
        if event.getKeys(['space']):
            npumps+=1
            if npumps>=maxPumps:
                popped=True
                continueRoutine=False
    CodeComponent barSize_2
      Begin Experiment:
        balloonSize=0.00
      Begin Routine:
        #balloon image's starting size
        balloonSize=0.00
        popped=False
      Each Frame:
        balloonSize=npumps*0.0184
    CodeComponent countdownEasy_2
      Begin Experiment:
        countdownStarted = False
      Begin Routine:
        if not countdownStarted:
            countdownClock = core.CountdownTimer(7)
            countdownStarted = True
        #7 second timer
      End Routine:
        countdownStarted = False
      Each Frame:
        timeRemaining = countdownClock.getTime()

        if timeRemaining <= 0.0:
            continueRoutine = False # end this trial immediately
            countdownStarted = False
    PolygonComponent background_2
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      startVal [time (s)] = 0.0
      size = [0.2, .55]
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    PolygonComponent barBody_2
      fillColor = $[0.553,-1.000,-1.000]
      pos [set every frame] = [0, 0]
      lineColor = $[0.553,-1.000,-1.000]
      startVal [time (s)] = 0.0
      size [set every frame] = $[.2, balloonSize]
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  Routine Ready
    TextComponent text
      text = Ready?
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine trial_instr
    TextComponent instr_text2
      text [set every repeat] = $instr_msg2
      startVal [time (s)] = 0.0
      letterHeight = 0.065
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'return'
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_2
      Begin Experiment:
        dhand = "bob"
        ndhand = "jim"
        if expInfo['Handedness'].lower().startswith("r") == True:
            dhand = "right"
            ndhand = "left"
        elif expInfo['Handedness'].lower().startswith("l") == True:
            dhand = "left"
            ndhand = "right"
        else:
            dhand = "JimBob"
            ndhand = "JimBob"
        instr_msg = "You will complete multiple rounds of a game.\n\nIn each round, you may choose the rounds difficulty.\n\nEasy rounds require you to use your %s index finger to push the SPACEBAR multiple times to fill the meter.\n\nHard rounds require you to use your %s pinky finger to push the SPACEBAR multiple times to fill the meter.\n\nEasy rounds are worth 1 point.\n\nHard rounds are worth 2 to 4 points.\n\nFor each round, you must fill the meter to earn points and you will have a high, medium, or low chance of earning points in each round.\n\nIf you do not choose the round difficulty within 5 seconds, the difficulty will be chosen randomly for you.\n\nDo you have any questions?\n\nPress ENTER to continue." %(dhand, ndhand)

        bar_textE = "Use your %s index finger." %dhand
        bar_textH = "Use your %s pinky finger." %ndhand

        instr_msg2 = "Do you have any questions?\n\nYou will now complete 20 minutes worth of rounds. Your goal is to earn as many points as possible.\n\nREMEMBER:\nEasy rounds take less time BUT earn only 1 point.\nHard rounds take more time BUT earn more points.\n\nOn easy rounds, use your %s index finger.\nOn hard rounds, use your %s pinky finger.\n\nPress ENTER to begin." %(dhand, ndhand)
  Routine trial
    TextComponent text_6
      text [set every repeat] = $bar_textE
      pos = (0, .5)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent CheckKeys
      Begin Routine:
        #reset round score to 0
        rscore = 0
        winE=rscore+1
        npumps=0
        maxPumps=30 #max presses to complete a trial
      End Routine:
        #probability 3 is 50%, 26 is 88%, 51 is 12% chance to earn points
        if (probability)==3:
            if prob==1:
                if npumps>=maxPumps:
                    rscore=rscore+1

        elif (probability)==26:
            if prob>3:
                if npumps>=maxPumps:
                    rscore=rscore+1

        elif (probability)==51:
            if prob<7:
                if npumps>=maxPumps:
                    rscore=rscore+1
        #add current round score to total score
        tscore += rscore

        repsA.addData('# of presses', npumps)
        repsA.addData('round score', rscore)
      Each Frame:
        if event.getKeys(['space']):
            npumps+=1
            if npumps>=maxPumps:
                popped=True
                continueRoutine=False
    CodeComponent barSize
      Begin Experiment:
        balloonSize=0.00
      Begin Routine:
        #balloon image's starting size
        balloonSize=0.00
        popped=False
        nPumps=0
      Each Frame:
        balloonSize=npumps*0.0184
    CodeComponent countdownEasy
      Begin Experiment:
        countdownStarted = False
      Begin Routine:
        if not countdownStarted:
            countdownClock = core.CountdownTimer(7)
            countdownStarted = True
        #7 second timer
      End Routine:
        countdownStarted = False
      Each Frame:
        timeRemaining = countdownClock.getTime()

        if timeRemaining <= 0.0:
            continueRoutine = False # end this trial immediately
            countdownStarted = False
    PolygonComponent background
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      startVal [time (s)] = 0.0
      size = [0.2, .55]
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    PolygonComponent barBody
      fillColor = $[0.553,-1.000,-1.000]
      pos [set every frame] = [0, 0]
      lineColor = $[0.553,-1.000,-1.000]
      startVal [time (s)] = 0.0
      size [set every frame] = $[.2, balloonSize]
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  Routine instrpractice
    TextComponent Inst_txt
      text [set every repeat] = $instr_msg
      startVal [time (s)] = 0.0
      letterHeight = 0.065
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    KeyboardComponent Inst_Key
      forceEndRoutine = True
      allowedKeys = 'return'
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent instr_code
      Begin Experiment:
        #EEfRT (Treadway et al., 2009)
        #organized and developed for Psychopy by Erick Rogers 08/15/16
        #bizerkmaverick@gmail.com


        dhand = "bob"
        ndhand = "jim"
        if expInfo['Handedness'].lower().startswith("r") == True:
            dhand = "right"
            ndhand = "left"
        elif expInfo['Handedness'].lower().startswith("l") == True:
            dhand = "left"
            ndhand = "right"
        else:
            dhand = "JimBob"
            ndhand = "JimBob"
        instr_msg = "You will complete multiple rounds of a game.\n\nIn each round, you may choose the rounds difficulty.\n\nEasy rounds require you to use your %s index finger to push the SPACEBAR multiple times to fill the meter.\n\nHard rounds require you to use your %s pinky finger to push the SPACEBAR multiple times to fill the meter.\n\nEasy rounds are worth 1 point.\n\nHard rounds are worth 2 to 4 points.\n\nFor each round, you must fill the meter to earn points and you will have a high, medium, or low chance of earning points in each round.\n\nIf you do not choose the round difficulty within 5 seconds, the difficulty will be chosen randomly for you.\n\nDo you have any questions?\n\nPress ENTER to continue." %(dhand, ndhand)

        bar_textE = "Use your %s index finger." %dhand
        bar_textH = "Use your %s pinky finger." %ndhand
  Routine cross
    CodeComponent Exp_Timer
      Begin Experiment:
        #Count Frames for all trials/rewards
        ExpTime = -1
      Begin Routine:
        #Set ExpTime variable to 0 on the first loop only
        if trials1.thisN == 0:
            ExpTime = globalClock.getTime()
      Each Frame:
        #End trials1 if 20 minutes have passed
        if globalClock.getTime() - ExpTime >= 1200.0:
            trials1.finished = True
    TextComponent text2
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.5
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  Routine pract_Select
    CodeComponent chooseBranch_2
      Begin Experiment:
        #EEfRT (Treadway et al., 2009)
        #organized and developed for Psychopy by Erick Rogers 08/15/16
        #bizerkmaverick@gmail.com


        dhand = "bob"
        ndhand = "jim"
        if expInfo['Handedness'] == "right":
            dhand = "right"
            ndhand = "left"
        elif expInfo['Handedness'] == "left":
            dhand = "left"
            ndhand = "right"
        else:
            dhand = "JimBob"
            ndhand = "JimBob"

        #hand = expInfo['Handedness']
      End Routine:
        #Press A for easy, B for hard
        if resp_pract.keys=='a':
            nRepsPE=1
            nRepsPH=0
        elif resp_pract.keys=='b':
            nRepsPE=0
            nRepsPH=1
    KeyboardComponent resp_pract
      forceEndRoutine = True
      allowedKeys = ['a', 'b']
      startVal [time (s)] = 0.0
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    TextComponent instrText_2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Choose Your Task:

        Press A for Easy Task

        Press B for Hard Task
  Routine pract_B
    TextComponent text_5
      text [set every repeat] = $bar_textH
      pos = (0, .5)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent checkKeysB_2
      Begin Routine:
        npumps=0
        maxPumps=100
      Each Frame:
        if event.getKeys(['space']):
            npumps+=1
            if npumps>=maxPumps:
                popped=True
                continueRoutine=False
    CodeComponent barSizeB_2
      Begin Routine:
        #balloon image's starting size
        balloonSize=0.00
        popped=False
      Each Frame:
        balloonSize=npumps*0.015
    CodeComponent countdownHard_2
      Begin Experiment:
        countdownStarted = False
      Begin Routine:
        if not countdownStarted:
            countdownClock = core.CountdownTimer(21)
            countdownStarted = True
        #21 second timer
      End Routine:
        countdownStarted = False
      Each Frame:
        timeRemaining = countdownClock.getTime()

        if timeRemaining <= 0.0:
            continueRoutine = False # end this trial immediately
            countdownStarted = False
    PolygonComponent backgroundB_2
      fillColor = $[1,1,1]
      startVal [time (s)] = 0.0
      size = [0.2, .55]
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    PolygonComponent barBodyB_2
      fillColor = $[0.553,-1.000,-1.000]
      pos [set every frame] = [0, 0]
      lineColor = $[0.553,-1.000,-1.000]
      startVal [time (s)] = 0.0
      size [set every frame] = $[.2, balloonSize/2.75]
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  Routine rFeedback
    CodeComponent code
      Begin Experiment:
        rFeedbackText=""
      Begin Routine:
        if rscore==winE:
                rFeedbackText="You win!\n1 point"
        else:
            rFeedbackText="No points on this trial."
    TextComponent text_2
      text [set every repeat] = $rFeedbackText
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine trialB
    TextComponent text_7
      text [set every repeat] = $bar_textH
      pos = (0, .5)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent checkKeysB
      Begin Routine:
        #reset round score to 0
        rscore = 0
        winH=rscore+hardMoney
        npumps=0
        maxPumps=100
      End Routine:
        #probability 3 is 50%, 26 is 88%, 51 is 12% chance to earn points
        if (probability)==3:
            if prob==1:
                if npumps>=maxPumps:
                    rscore=rscore+hardMoney

        elif (probability)==26:
            if prob>3:
                if npumps>=maxPumps:
                    rscore=rscore+hardMoney

        elif (probability)==51:
            if prob<7:
                if npumps>=maxPumps:
                    rscore=rscore+hardMoney
        #
        #add current round score to total score
        tscore += rscore

        repsB.addData('# of presses', npumps)
        repsB.addData('round score', rscore)
        trials1.addData('total score', tscore)
      Each Frame:
        if event.getKeys(['space']):
            npumps+=1
            if npumps>=maxPumps:
                popped=True
                continueRoutine=False
    CodeComponent barSizeB
      Begin Routine:
        #balloon image's starting size
        balloonSize=0.00
        popped=False
        nPumps=0
      Each Frame:
        balloonSize=npumps*0.015
    CodeComponent countdownHard
      Begin Experiment:
        countdownStarted = False
      Begin Routine:
        if not countdownStarted:
            countdownClock = core.CountdownTimer(21)
            countdownStarted = True
        #21 second timer
      End Routine:
        countdownStarted = False
      Each Frame:
        timeRemaining = countdownClock.getTime()

        if timeRemaining <= 0.0:
            continueRoutine = False # end this trial immediately
            countdownStarted = False
    PolygonComponent backgroundB
      fillColor = $[1,1,1]
      startVal [time (s)] = 0.0
      size = [0.2, .55]
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    PolygonComponent barBodyB
      fillColor = $[0.553,-1.000,-1.000]
      pos [set every frame] = [0, 0]
      lineColor = $[0.553,-1.000,-1.000]
      startVal [time (s)] = 0.0
      size [set every frame] = $[.2, balloonSize/2.75]
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  Routine FinalScore
    CodeComponent code_4
      Begin Routine:
        finalScore="""Thank-you!\nYou earned a total of %s Point(s)""" %tscore
    TextComponent finalscore
      text [set every repeat] = $finalScore
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent DoneKey
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instructions
    CodeComponent chooseBranch
      Begin Experiment:
        from psychopy import visual
        import random
        #initialize scoring variables
        #round score
        rscore = 0
        #total score
        tscore = 0
      Begin Routine:
        prob=randint(1,(probability)) #probability for earning points

        selectBlock=randint(1,3) #randomly selects easy or hard trial

        theProbText=(probText)

        hardMoney=randint(2,5) #earn 2-4 points on hard trials

        hardMoneyText=hardMoney

        hardMoneyText="""Press B for Hard Task\n%s Points""" %hardMoney

        if not countdownStarted:
            countdownClock = core.CountdownTimer(5)
            countdownStarted = True
        #5 second timer
      End Routine:
        #Press A for easy, B for hard, otherwise chosen randomly after 5 secs
        if trial_select=='a':
            nRepsA=1
            nRepsB=0
        elif trial_select=='b':
            nRepsA=0
            nRepsB=1
        elif selectBlock==1:
            nRepsA=0
            nRepsB=1
        else:
            nRepsA=1
            nRepsB=0
        #
        countdownStarted = False
      Each Frame:
        timeRemaining = countdownClock.getTime()

        if timeRemaining <= 0.0:
            continueRoutine = False
            countdownStarted = False
    KeyboardComponent trial_select
      forceEndRoutine = True
      allowedKeys = ['a', 'b']
      startVal [time (s)] = 0.0
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    TextComponent instrText
      pos = [0, .3]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Choose Your Task:

        Probability of win:

        Press A for Easy Task
        1 point
    TextComponent percentText
      text [set every repeat] = $theProbText
      pos = [-.14, .25]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent moneyText
      text [set every repeat] = $hardMoneyText
      pos = [0, -.2]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine cross_pract
    TextComponent text2_2
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.5
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  Routine rFeedbackH
    CodeComponent code_3
      Begin Experiment:
        rHardFeedbackText=""
      Begin Routine:
        if rscore==winH:
                rHardFeedbackText="""You win!\n%s Points""" %hardMoney
        else:
            rHardFeedbackText="No points on this trial."
    TextComponent text_3
      text [set every repeat] = $rHardFeedbackText
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine instrpractice
  Routine Pract_Instr
  LoopInitiator trialsP loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine cross_pract
    Routine pract_Select
    Routine Ready
    LoopInitiator nRepsPE loopType="TrialHandler"
      loopType = random
      nReps = nRepsPE
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      Routine pract_A
      Routine Feedback
    LoopTerminator nRepsPE
    LoopInitiator nRepsPH loopType="TrialHandler"
      loopType = random
      nReps = nRepsPH
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      Routine pract_B
      Routine Feedback
    LoopTerminator nRepsPH
  LoopTerminator trialsP
  Routine trial_instr
  LoopInitiator trials1 loopType="TrialHandler"
    conditionsFile = trialTypes.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'probText': u'88 Percent', u'probability': 26},
      {u'probText': u'12 Percent', u'probability': 51},
      {u'probText': u'50 Percent', u'probability': 3},
      {u'probText': u'88 Percent', u'probability': 26},
      {u'probText': u'50 Percent', u'probability': 3},
      {u'probText': u'12 Percent', u'probability': 51},
      {u'probText': u'50 Percent', u'probability': 3},
      {u'probText': u'50 Percent', u'probability': 3},
      {u'probText': u'12 Percent', u'probability': 51},
      {u'probText': u'50 Percent', u'probability': 3},
      {u'probText': u'50 Percent', u'probability': 3},
      {u'probText': u'88 Percent', u'probability': 26},
      {u'probText': u'12 Percent', u'probability': 51},
      {u'probText': u'88 Percent', u'probability': 26},
      {u'probText': u'88 Percent', u'probability': 26},
      {u'probText': u'12 Percent', u'probability': 51},
      {u'probText': u'12 Percent', u'probability': 51},
      {u'probText': u'88 Percent', u'probability': 26},
      {u'probText': u'12 Percent', u'probability': 51},
      {u'probText': u'88 Percent', u'probability': 26},
      {u'probText': u'50 Percent', u'probability': 3},
      {u'probText': u'50 Percent', u'probability': 3},
      {u'probText': u'50 Percent', u'probability': 3},
      {u'probText': u'88 Percent', u'probability': 26},
      {u'probText': u'88 Percent', u'probability': 26},
      {u'probText': u'88 Percent', u'probability': 26},
      {u'probText': u'50 Percent', u'probability': 3},
      {u'probText': u'50 Percent', u'probability': 3},
      {u'probText': u'50 Percent', u'probability': 3},
      {u'probText': u'12 Percent', u'probability': 51},
      {u'probText': u'50 Percent', u'probability': 3}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
    Routine cross
    Routine Instructions
    Routine Ready
    LoopInitiator repsA loopType="TrialHandler"
      loopType = random
      nReps = nRepsA
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      Routine trial
      Routine Feedback
      Routine rFeedback
    LoopTerminator repsA
    LoopInitiator repsB loopType="TrialHandler"
      loopType = random
      nReps = nRepsB
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      Routine trialB
      Routine Feedback
      Routine rFeedbackH
    LoopTerminator repsB
  LoopTerminator trials1
  Routine FinalScore
